OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Stream reading example
0xf8034a49 = Inria
Comment
  The Generic Stream Reader box
  reads an OpenViBE file from disk and sends
  its content to the following box.
  The OpenViBE file format can store any
  stream of the OpenViBE platform into a file.
Comment
  The Signal Display box displays
  the content of the file.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator => #0
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#1.Signal stream, Stimulations=#0, Channel Units=#1.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#1.Signal stream, Stimulations stream=#0 -> CSV File Writer
  Filename = C:/Users/Me/Documents/Class/COGS 189/OpenVibe/test.csv
  Precision = 10
  Append data = false
  Only last matrix = false
